<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="3.9.0">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" parameter_version="1">
        <parameter name="File names">
            <file>{INPUT_MZML}</file>
        </parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_cropfilter.CropFilterModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time" selected="true">
                <min>{RT_CROP_MIN}</min>
                <max>{RT_CROP_MAX}</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="All MS levels">0</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">{POLARITY}</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="m/z">
            <min>0.0</min>
            <max>10000.0</max>
        </parameter>
        <parameter name="Suffix">crop</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">{POLARITY}</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">{MS1_NOISE_LEVEL}</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MSn, level ≥ 2">3</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">{POLARITY}</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">{MS2_NOISE_LEVEL}</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">{POLARITY}</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">{MIN_CONSECUTIVE_SCANS}</parameter>
        <parameter name="Minimum intensity for consecutive scans">{MIN_CONSECUTIVE_INTENSITY}</parameter>
        <parameter name="Minimum absolute height">{MIN_FEATURE_HEIGHT}</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>{MZ_TOL_ABS}</absolutetolerance>
            <ppmtolerance>{MZ_TOL_PPM}</ppmtolerance>
        </parameter>
        <parameter name="Suffix">eics</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Smoothing algorithm" selected_item="Savitzky Golay">
            <module name="Savitzky Golay">
                <parameter name="Retention time smoothing" selected="true">5</parameter>
                <parameter name="Mobility smoothing" selected="false">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</parameter>
            </module>
        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="Suffix">sm</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">r</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>{MZ_TOL_ABS}</absolutetolerance>
                <ppmtolerance>{MZ_TOL_PPM}</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.08</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="true">1</parameter>
            <parameter name="Limit by ion mobility edges">true</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.9</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.05</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">{MIN_FEATURE_HEIGHT}</parameter>
        <parameter name="Min ratio of peak top/edge">1.5</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.0</min>
            <max>5.0</max>
        </parameter>
        <parameter name="Minimum scans (data points)">{MIN_CONSECUTIVE_SCANS}</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_sirius.SiriusExportModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>{OUTPUT_MGF}</current_file>
        </parameter>
        <parameter name="Merge MS/MS" selected="true">
            <parameter name="Select spectra to merge">across samples</parameter>
            <parameter name="m/z merge mode">weighted average (remove outliers)</parameter>
            <parameter name="intensity merge mode">sum intensities</parameter>
            <parameter name="Expected mass deviation">
                <absolutetolerance>{MZ_TOL_ABS}</absolutetolerance>
                <ppmtolerance>{MZ_TOL_PPM}</ppmtolerance>
            </parameter>
            <parameter name="Cosine threshold (%)">0.7</parameter>
            <parameter name="Signal count threshold (%)">0.2</parameter>
            <parameter name="Isolation window offset (m/z)">0.0</parameter>
            <parameter name="Isolation window width (m/z)">{ISOLATION_WINDOW_WIDTH}</parameter>
        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>{MZ_TOL_ABS}</absolutetolerance>
            <ppmtolerance>{MZ_TOL_PPM}</ppmtolerance>
        </parameter>
        <parameter name="Only rows with annotation">false</parameter>
        <parameter name="Exclude multiple charge">false</parameter>
        <parameter name="Exclude multimers">false</parameter>
    </batchstep>
</batch>
